PsychoPy2experiment version="2021.2.1"
Settings
  Data filename = 'data/%s_run%s_%s_%s' %(expInfo['participant'], expInfo['run'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '001', 'group': '', 'university': '', 'run': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1200, 900]
  color = $[-1,-1,-1]
  expName = task_complete_blocked_LC_updated
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Routines
  Routine pauseFMRI
    TextComponent end_screen
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = End of this scan
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  Routine ITI
    CodeComponent code_6
      Code Type = Auto->JS
      Begin Routine:
        if type_encoding == 1:
            ITI_length = encoding_intertrials[totalTrials]
        elif type_retrieval == 1:
            ITI_length = retrieval_intertrials[totalTrials]
      End Routine:
        totalTrials = totalTrials + 1
    TextComponent text_16
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_length
      text = +
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  Routine scan_ready
    TextComponent wait_text
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = The experiment will begin shortly
      wrapWidth = 2
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    KeyboardComponent scanner_pulse
      allowedKeys = '5','t'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Auto->JS
      Begin Routine:
        timerStarted = False
        totalTrials = 0
        random.shuffle(encoding_intertrials)
        random.shuffle(retrieval_intertrials)
  Routine start1
    TextComponent button_check_1
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = Press 1
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    KeyboardComponent button_check_resp_1
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
      Begin Experiment:
        import random

        encoding_intertrials = [1,1,1,1,1,1,2,2,2,2,2,2,2,2,3,3,3,3,3,3]

        retrieval_intertrials = [1,1,1,1,1,1,1,1,2,2,2,2,2,2,2,2,2,3,3,3,3,3,3,3,3]
  Routine end_exp
    TextComponent text_14
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = You completed the experiment!
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  Routine start4
    TextComponent text_4
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = Press 4
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    KeyboardComponent key_resp_5
      allowedKeys = '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start2
    TextComponent text_2
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = Press 2
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    KeyboardComponent key_resp_3
      allowedKeys = '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine retrieval1FMRI
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        totalTrials = 0
      Begin Routine:
        if not timerStarted:
            scanStartTime = globalClock.getTime()
            timerStarted = True

        thisExp.addData("Trial_familiarity_onset", globalClock.getTime() - scanStartTime)
    TextComponent item_rec
      letterHeight = 0.15
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = Did you see this item before?
      wrapWidth = 2
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    ImageComponent image_4
      image [set every repeat] = $stimImg
      size = [0.6, 0.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    TextComponent item_rec_guide
      letterHeight = 0.15
      pos = [0, -0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = YES (1) or NO (2)
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    KeyboardComponent item_rec_resp
      allowedKeys = '1','2'
      correctAns = $familiarCorrect
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      storeCorrect = True
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  Routine retrieval2FMRI
    CodeComponent code_9
      Code Type = Auto->JS
      Begin Routine:
        type_encoding = 0
        type_retrieval = 1
        thisExp.addData("Trial_source_onset", globalClock.getTime() - scanStartTime)
    TextComponent source_rec
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      wrapWidth = 2
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      text:
                Where did you see it:

        SPACE (1), TIME (2), or NEW (3)?
    KeyboardComponent source_rec_resp
      allowedKeys = '1','2','3'
      correctAns = $sourceCorrect
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      storeCorrect = True
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  Routine start3
    TextComponent text_3
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = Press 3
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    KeyboardComponent key_resp_4
      allowedKeys = '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait_screen
    KeyboardComponent spacebar_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent one_moment
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = One moment
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Flow
  Routine start1
  Routine start2
  Routine start3
  Routine start4
  Routine scan_ready
  LoopInitiator retrieval_trials1 loopType="TrialHandler"
    conditionsFile = $'condition_files/retrieval_g'+expInfo['group']+'_b'+expInfo['run']+'.xlsx'
    loopType = random
    nReps = 1
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    Routine retrieval1FMRI
    Routine retrieval2FMRI
    Routine ITI
  LoopTerminator retrieval_trials1
  Routine end_exp
