PsychoPy2experiment version="2022.1.3"
Settings
  Data filename = 'data/%s_%s_%s_%s' %(expInfo['participant'], expInfo['time'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'time': '', 'group': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = source_memory
  keyboardBackend = ioHub
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Routines
  Routine trial
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine pauseFMRI
    TextComponent end_screen
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = End of this scan
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  Routine ITI
    CodeComponent code_6
      Code Type = Auto->JS
      Begin Routine:
        if type_encoding == 1:
            ITI_length = encoding_intertrials[totalTrials]
        elif type_retrieval == 1:
            ITI_length = retrieval_intertrials[totalTrials]
      End Routine:
        totalTrials = totalTrials + 1
    TextComponent text_16
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_length
      text = +
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  Routine distractInstruct
    TextComponent instruc
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Press 1 for X
        Press 2 for O
  Routine scan_ready
    TextComponent wait_text
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = The experiment will begin shortly
      wrapWidth = 2
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    KeyboardComponent scanner_pulse
      allowedKeys = '5','t','T'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Auto->JS
      Begin Routine:
        timerStarted = False
        totalTrials = 0
        random.shuffle(encoding_intertrials)
        random.shuffle(retrieval_intertrials)
  Routine start1
    TextComponent button_check_1
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = Press 1
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    KeyboardComponent button_check_resp_1
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
      Begin Experiment:
        import random

        encoding_intertrials = [1,1,1,1,1,1,2,2,2,2,2,2,2,2,3,3,3,3,3,3]

        retrieval_intertrials = [1,1,1,1,1,1,1,1,2,2,2,2,2,2,2,2,2,3,3,3,3,3,3,3,3]
  Routine end_exp
    TextComponent text_14
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = You completed the experiment!
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  Routine start4
    TextComponent text_4
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = Press 4
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    KeyboardComponent key_resp_5
      allowedKeys = '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine encodeFMRI
    CodeComponent code_4
      Code Type = Auto->JS
      Begin Routine:
        if not timerStarted:
            scanStartTime = globalClock.getTime()
            timerStarted = True

        thisExp.addData("Trial_cue_onset", globalClock.getTime() - scanStartTime)
    TextComponent instruction
      letterHeight = 0.15
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Imagine
      wrapWidth = 2
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    ImageComponent image_3
      image [set every repeat] = $'stimulus_images_' + expInfo['time'] + '/' + stimImg
      size = [0.4,0.4]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = height
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    TextComponent in_
      letterHeight = 0.15
      pos = [0, -0.5]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = in
      wrapWidth = 2
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    TextComponent source_cue
      letterHeight = 0.15
      pos = [0, -0.7]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $taskType
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    TextComponent fixation
      letterHeight = 0.3
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 4.0
      text = +
      wrapWidth = 2
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  Routine start2
    TextComponent text_2
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = Press 2
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    KeyboardComponent key_resp_3
      allowedKeys = '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rateFMRI
    CodeComponent code_5
      Code Type = Auto->JS
      Begin Routine:
        type_encoding = 1
        type_retrieval = 0
        thisExp.addData("Response_cue_onset", globalClock.getTime() - scanStartTime)
    TextComponent rating
      letterHeight = 0.15
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      wrapWidth = 2
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      text:
        How well did you do?



        1           2          3            4
    TextComponent text
      letterHeight = 0.08
      pos = [0, -0.35]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text =    (unable)                                                         (very clearly)
      wrapWidth = 2
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    KeyboardComponent rating_resp
      allowedKeys = '1','2','3','4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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  Routine distractorFMRI
    TextComponent distractor_task
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.95
      text [set every repeat] = $letter
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    KeyboardComponent distractor_task_resp
      allowedKeys = '1','2'
      correctAns = $correctResponse
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.95
      storeCorrect = True
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    TextComponent flicker
      letterHeight = 0.3
      startVal [time (s)] = 0.95
      stopVal [duration (s)] = 0.05
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  Routine retrieval1FMRI
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        totalTrials = 0
      Begin Routine:
        if not timerStarted:
            scanStartTime = globalClock.getTime()
            timerStarted = True

        thisExp.addData("Trial_familiarity_onset", globalClock.getTime() - scanStartTime)
    TextComponent item_rec
      letterHeight = 0.15
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = Did you see this item before?
      wrapWidth = 2
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    ImageComponent image_4
      image [set every repeat] = $'stimulus_images_' + expInfo['time'] + '/' + stimImg
      size = [0.4,0.4]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      units = height
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    TextComponent item_rec_guide
      letterHeight = 0.15
      pos = [0, -0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = YES (1) or NO (2)
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    KeyboardComponent item_rec_resp
      allowedKeys = '1','2'
      correctAns = $familiarCorrect
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      storeCorrect = True
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  Routine retrieval2FMRI
    CodeComponent code_9
      Code Type = Auto->JS
      Begin Routine:
        type_encoding = 0
        type_retrieval = 1
        thisExp.addData("Trial_source_onset", globalClock.getTime() - scanStartTime)
    TextComponent source_rec
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      wrapWidth = 2
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      text:
                Where did you see it:

        SPACE (1), TIME (2), or NEW (3)?
    KeyboardComponent source_rec_resp
      allowedKeys = '1','2','3'
      correctAns = $sourceCorrect
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      storeCorrect = True
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  Routine start3
    TextComponent text_3
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = Press 3
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    KeyboardComponent key_resp_4
      allowedKeys = '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait_screen
    KeyboardComponent spacebar_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent one_moment
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = One moment
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  Routine fixationCross
    TextComponent fixation_cross
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent fixation_cross_press_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine fixationCross
  Routine start1
  Routine start2
  Routine start3
  Routine start4
  Routine scan_ready
  LoopInitiator encode_trials1 loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = $'condition_files/encoding_g'+expInfo['group']+'_b1.xlsx'
    loopType = random
    nReps = 1
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    Routine encodeFMRI
    Routine rateFMRI
    Routine ITI
  LoopTerminator encode_trials1
  LoopInitiator encode_trials2 loopType="TrialHandler"
    Selected rows = 10:20
    conditionsFile = $'condition_files/encoding_g'+expInfo['group']+'_b1.xlsx'
    loopType = random
    nReps = 1
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    Routine encodeFMRI
    Routine rateFMRI
    Routine ITI
  LoopTerminator encode_trials2
  Routine distractInstruct
  LoopInitiator distractor loopType="TrialHandler"
    conditionsFile = condition_files/distractor.xlsx
    loopType = random
    nReps = 30
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    conditions:
      [{'correctResponse': 1, 'letter': 'X'},
      {'correctResponse': 2, 'letter': 'O'}]
    Routine distractorFMRI
  LoopTerminator distractor
  Routine pauseFMRI
  Routine wait_screen
  Routine scan_ready
  LoopInitiator encode_trials3 loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = $'condition_files/encoding_g'+expInfo['group']+'_b2.xlsx'
    loopType = random
    nReps = 1
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    Routine encodeFMRI
    Routine rateFMRI
    Routine ITI
  LoopTerminator encode_trials3
  LoopInitiator encode_trials4 loopType="TrialHandler"
    Selected rows = 10:20
    conditionsFile = $'condition_files/encoding_g'+expInfo['group']+'_b2.xlsx'
    loopType = random
    nReps = 1
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    Routine encodeFMRI
    Routine rateFMRI
    Routine ITI
  LoopTerminator encode_trials4
  Routine distractInstruct
  LoopInitiator distractor_2 loopType="TrialHandler"
    conditionsFile = condition_files/distractor.xlsx
    loopType = random
    nReps = 30
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    conditions:
      [{'correctResponse': 1, 'letter': 'X'},
      {'correctResponse': 2, 'letter': 'O'}]
    Routine distractorFMRI
  LoopTerminator distractor_2
  Routine pauseFMRI
  Routine wait_screen
  Routine scan_ready
  LoopInitiator encode_trials5 loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = $'condition_files/encoding_g'+expInfo['group']+'_b3.xlsx'
    loopType = random
    nReps = 1
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    Routine encodeFMRI
    Routine rateFMRI
    Routine ITI
  LoopTerminator encode_trials5
  LoopInitiator encode_trials6 loopType="TrialHandler"
    Selected rows = 10:20
    conditionsFile = $'condition_files/encoding_g'+expInfo['group']+'_b3.xlsx'
    loopType = random
    nReps = 1
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    Routine encodeFMRI
    Routine rateFMRI
    Routine ITI
  LoopTerminator encode_trials6
  Routine distractInstruct
  LoopInitiator distractor3 loopType="TrialHandler"
    conditionsFile = condition_files/distractor.xlsx
    loopType = random
    nReps = 30
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    conditions:
      [{'correctResponse': 1, 'letter': 'X'},
      {'correctResponse': 2, 'letter': 'O'}]
    Routine distractorFMRI
  LoopTerminator distractor3
  Routine pauseFMRI
  Routine wait_screen
  Routine scan_ready
  LoopInitiator encode_trials7 loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = $'condition_files/encoding_g'+expInfo['group']+'_b4.xlsx'
    loopType = random
    nReps = 1
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    Routine encodeFMRI
    Routine rateFMRI
    Routine ITI
  LoopTerminator encode_trials7
  LoopInitiator encode_trials8 loopType="TrialHandler"
    Selected rows = 10:20
    conditionsFile = $'condition_files/encoding_g'+expInfo['group']+'_b4.xlsx'
    loopType = random
    nReps = 1
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    Routine encodeFMRI
    Routine rateFMRI
    Routine ITI
  LoopTerminator encode_trials8
  Routine distractInstruct
  LoopInitiator distractor4 loopType="TrialHandler"
    conditionsFile = condition_files/distractor.xlsx
    loopType = random
    nReps = 30
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    conditions:
      [{'correctResponse': 1, 'letter': 'X'},
      {'correctResponse': 2, 'letter': 'O'}]
    Routine distractorFMRI
  LoopTerminator distractor4
  Routine pauseFMRI
  Routine wait_screen
  Routine scan_ready
  LoopInitiator retrieval_trials1 loopType="TrialHandler"
    conditionsFile = $'condition_files/retrieval_g'+expInfo['group']+'_b1.xlsx'
    loopType = random
    nReps = 1
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    Routine retrieval1FMRI
    Routine retrieval2FMRI
    Routine ITI
  LoopTerminator retrieval_trials1
  Routine pauseFMRI
  Routine wait_screen
  Routine scan_ready
  LoopInitiator retrieval_trials2 loopType="TrialHandler"
    conditionsFile = $'condition_files/retrieval_g'+expInfo['group']+'_b2.xlsx'
    loopType = random
    nReps = 1
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    Routine retrieval1FMRI
    Routine retrieval2FMRI
    Routine ITI
  LoopTerminator retrieval_trials2
  Routine pauseFMRI
  Routine wait_screen
  Routine scan_ready
  LoopInitiator retrieval_trials3 loopType="TrialHandler"
    conditionsFile = $'condition_files/retrieval_g'+expInfo['group']+'_b3.xlsx'
    loopType = random
    nReps = 1
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    Routine retrieval1FMRI
    Routine retrieval2FMRI
    Routine ITI
  LoopTerminator retrieval_trials3
  Routine pauseFMRI
  Routine wait_screen
  Routine scan_ready
  LoopInitiator retrieval_trials4 loopType="TrialHandler"
    conditionsFile = $'condition_files/retrieval_g'+expInfo['group']+'_b4.xlsx'
    loopType = random
    nReps = 1
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    Routine retrieval1FMRI
    Routine retrieval2FMRI
    Routine ITI
  LoopTerminator retrieval_trials4
  Routine end_exp
  Routine fixationCross
